PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = flanker
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine experimentalTrial
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    CodeComponent expTrial_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myExp.trial',            sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.arrows',           sequenceDataset.arrows[experimentalBlock.thisN])
        thisExp.addData('myExp.congruent',      sequenceDataset.congruent[experimentalBlock.thisN])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.expectedResponse[experimentalBlock.thisN])
      End Routine:
        # observed response
        if expTrial_key.keys:
            sequenceDataset.observedResponse[experimentalBlock.thisN] = expTrial_key.keys
        thisExp.addData('myExp.observedResponse',   sequenceDataset.observedResponse[experimentalBlock.thisN])

        # trialDuration
        thisExp.addData('myExp.trialDuration',      sequenceDataset.trialDuration[experimentalBlock.thisN])

        # Accuracy
        if sequenceDataset.observedResponse[experimentalBlock.thisN]==np.nan:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(0)
        else:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == sequenceDataset.expectedResponse[experimentalBlock.thisN])
        thisExp.addData('myExp.Accuracy',         sequenceDataset.Accuracy[experimentalBlock.thisN])

        # RT all trials
        if expTrial_key.keys:
            sequenceDataset.RT_allTrials[experimentalBlock.thisN]         = expTrial_key.rt
            thisExp.addData('myExp.RT_allTrials',     sequenceDataset.RT_allTrials[experimentalBlock.thisN])

        # RT correct trials
        if sequenceDataset.Accuracy[experimentalBlock.thisN] == 1:
            sequenceDataset.RT_correctTrials[experimentalBlock.thisN]     = expTrial_key.rt
            thisExp.addData('myExp.RT_correctTrials',     sequenceDataset.RT_correctTrials[experimentalBlock.thisN])
    TextComponent expTrial_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    KeyboardComponent expTrial_key
      allowedKeys = 'left','right'
      correctAns = $sequenceDataset.expectedResponse[experimentalBlock.thisN]
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = first key
      storeCorrect = True
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    TextComponent expTrial_stimuli
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $sequenceDataset.arrows[experimentalBlock.thisN]
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    CodeComponent expTrial_serialCOM
      Code Type = Py
      Begin Routine:
        # initialize variables controlling whether the stimulus and response triggers have been sent for this trial
        stimulusPulse_sent = False
        responsePulse_sent = False
      Each Frame:
        # communicate with the serial port
        if doYouWantCOM:

            # send stimulus pulse and record at what time it is sent
            if expTrial_stimuli.status == STARTED and not stimulusPulse_sent:
                # decide which marker to send
                if sequenceDataset.congruent[experimentalBlock.thisN]:
                    stimmarker2send = marker_stimulusOnset_congruent
                else:
                    stimmarker2send = marker_stimulusOnset_incongruent
                # send marker
                win.callOnFlip(port.write, [stimmarker2send])
                stimulusPulse_startTime = core.monotonicClock.getTime()
                stimulusPulse_sent = True
                stimulusPulse_terminated = False
            # forcing termination of a stimulus pulse if it lasts at least 20 ms
            if stimulusPulse_sent and not stimulusPulse_terminated:
                if core.monotonicClock.getTime() - stimulusPulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    stimulusPulse_terminated = True


            # send a response pulse and record at what time it is sent
            if len(expTrial_key.keys)>0 and not responsePulse_sent:
                # decide which marker to send
                if expTrial_key.corr:
                    respmarker2send = marker_response_correct
                else:
                    respmarker2send = marker_response_incorrect
                # send marker
                win.callOnFlip(port.write, [respmarker2send])
                responsePulse_startTime = core.monotonicClock.getTime()
                responsePulse_sent = True
                responsePulse_terminated = False
            # forcing termination of a response pulse if it lasts at least 20 ms
            if responsePulse_sent and not responsePulse_terminated:
                if core.monotonicClock.getTime() - responsePulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    responsePulse_terminated = True
      End Routine:
        # add timing of triggers
        if stimulusPulse_sent:
            thisExp.addData('myExp.stimulusPulse_startTime', stimulusPulse_startTime)
            thisExp.addData('myExp.stimulusPulse_marker', stimmarker2send)
        if responsePulse_sent:
            thisExp.addData('myExp.responsePulse_startTime', responsePulse_startTime)
            thisExp.addData('myExp.responsePulse_marker', respmarker2send)
  Routine practiceTrial_feedback
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    CodeComponent practFB_code
      Code Type = Py
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      Begin Routine:
        # text, color, and sound of feedback
        if practTrial_key.corr:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            if not practTrial_key.keys:
                fb_text = 'Fail to respond'
                fb_col = 'red'
                sound_volume = 1
            else:
                fb_text = 'Incorrect'
                fb_col = 'red'
                sound_volume = 1


        # duration of feedback
        fb_duration = 0.5
    TextComponent practFB_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent practFB_text
      color [set every repeat] = $fb_col
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent practFB_sound
      forceEndRoutine = False
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent practFB_code2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg = "%i of %i correct responses \n%.2f%% correct \nMdn RT = %.2f s " %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctTrials_MdnRT )
        else:
            msg = "%i of %i correct responses \n%.2f%% correct" %(Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent practFB_text2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $msg
    TextComponent practFB_cont
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70% you will repeat the practice block.

        Press bar to continue
    KeyboardComponent practFB_contKey
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practiceTrial
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    CodeComponent practTrial_addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.trial[practiceBlock.thisN])
        thisExp.addData('myPract.arrows', sequenceDataset.arrows[practiceBlock.thisN])
        thisExp.addData('myPract.congruent', sequenceDataset.congruent[practiceBlock.thisN])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.expectedResponse[practiceBlock.thisN])
      End Routine:
        # observed response
        if practTrial_key.keys:
            sequenceDataset.observedResponse[practiceBlock.thisN] = practTrial_key.keys
        thisExp.addData('myPract.observedResponse',   sequenceDataset.observedResponse[practiceBlock.thisN])

        # trialDuration
        thisExp.addData('myPract.trialDuration',      sequenceDataset.trialDuration[practiceBlock.thisN])

        # Accuracy
        if sequenceDataset.observedResponse[practiceBlock.thisN]==np.nan:
            sequenceDataset.Accuracy[practiceBlock.thisN]             = int(0)
        else:
            sequenceDataset.Accuracy[practiceBlock.thisN]             = int(sequenceDataset.observedResponse[practiceBlock.thisN] == sequenceDataset.expectedResponse[practiceBlock.thisN])
        thisExp.addData('myPract.Accuracy',         sequenceDataset.Accuracy[practiceBlock.thisN])

        # RT all trials
        if practTrial_key.keys:
            sequenceDataset.RT_allTrials[practiceBlock.thisN]         = practTrial_key.rt
            thisExp.addData('myPract.RT_allTrials',     sequenceDataset.RT_allTrials[practiceBlock.thisN])

        # RT correct trials
        if sequenceDataset.Accuracy[practiceBlock.thisN] == 1:
            sequenceDataset.RT_correctTrials[practiceBlock.thisN]     = practTrial_key.rt
            thisExp.addData('myPract.RT_correctTrials',     sequenceDataset.RT_correctTrials[practiceBlock.thisN])
    TextComponent practTrial_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent practTrial_stimuli
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $sequenceDataset.arrows[practiceBlock.thisN]
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    KeyboardComponent practTrial_key
      allowedKeys = 'left','right'
      correctAns = $sequenceDataset.expectedResponse[practiceBlock.thisN]
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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    CodeComponent practTrial_serialCOM
      Code Type = Py
      disabled = True
      Begin Routine:
        # initialize variables controlling whether the stimulus and response triggers have been sent for this trial
        stimulusPulse_sent = False
        responsePulse_sent = False
      Each Frame:
        # communicate with the serial port
        if doYouWantCOM:

            # send stimulus pulse and record at what time it is sent
            if practTrial_stimuli.status == STARTED and not stimulusPulse_sent:
                # decide which marker to send
                if sequenceDataset.congruent[practiceBlock.thisN]:
                    stimmarker2send = marker_stimulusOnset_congruent
                else:
                    stimmarker2send = marker_stimulusOnset_incongruent
                # send marker
                win.callOnFlip(port.write, [stimmarker2send])
                stimulusPulse_startTime = core.monotonicClock.getTime()
                stimulusPulse_sent = True
                stimulusPulse_terminated = False
            # forcing termination of a stimulus pulse if it lasts at least 20 ms
            if stimulusPulse_sent and not stimulusPulse_terminated:
                if core.monotonicClock.getTime() - stimulusPulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    stimulusPulse_terminated = True


            # send a response pulse and record at what time it is sent
            if len(practTrial_key.keys)>0 and not responsePulse_sent:
                # decide which marker to send
                if practTrial_key.corr:
                    respmarker2send = marker_response_correct
                else:
                    respmarker2send = marker_response_incorrect
                # send marker
                win.callOnFlip(port.write, [respmarker2send])
                responsePulse_startTime = core.monotonicClock.getTime()
                responsePulse_sent = True
                responsePulse_terminated = False
            # forcing termination of a response pulse if it lasts at least 20 ms
            if responsePulse_sent and not responsePulse_terminated:
                if core.monotonicClock.getTime() - responsePulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    responsePulse_terminated = True
      End Routine:
        # add timing of triggers
        if stimulusPulse_sent:
            thisExp.addData('myPract.stimulusPulse_startTime', stimulusPulse_startTime)
            thisExp.addData('myPract.stimulusPulse_marker', stimmarker2send)
        if responsePulse_sent:
            thisExp.addData('myPract.responsePulse_startTime', responsePulse_startTime)
            thisExp.addData('myPract.responsePulse_marker', respmarker2send)
  Routine pass_2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = bar
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  Routine instruction
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    ImageComponent instImage
      image = instruct1.jpg
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent instCont
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent instContKey
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instruction2
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    ImageComponent instImage2
      image = instruct2.jpg
      pos = (0,0.05)
      startVal [time (s)] = 0.0
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    TextComponent instCont2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent instContKey2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine startpractice
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    TextComponent startPract_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent startPract_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine starttask
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    KeyboardComponent startExp_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent startExp_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
  Routine endslide
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    ImageComponent endImage
      image = end slide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endCont
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent endContKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceBlank
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    CodeComponent practBlank_addData
      Code Type = Auto->JS
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      Begin Routine:
        # blank duration
        thisExp.addData('myPract.blankDuration',      sequenceDataset.blank_duration[practiceBlock.thisN])
    TextComponent practBlank_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.blank_duration[practiceBlock.thisN]
      text = +
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  Routine inst_EEGrecording
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    ImageComponent instImageEEG
      image = EEG_instruction.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instCont3
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent instContKey3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalBlank
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    CodeComponent expBlank_addData
      Code Type = Auto->JS
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      Begin Routine:
        # blank duration
        thisExp.addData('myExp.blankDuration',      sequenceDataset.blank_duration[experimentalBlock.thisN])
      End Routine:
        # trialDuration
        sequenceDataset.trialDuration[experimentalBlock.thisN] = sequenceDataset.blank_duration[experimentalBlock.thisN] + 1
        thisExp.addData('myExp.trialDuration',      sequenceDataset.trialDuration[experimentalBlock.thisN])
    TextComponent expBlank_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.blank_duration[experimentalBlock.thisN]
      text = +
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  Routine practStimuliSequenceGeneration
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    CodeComponent practSequenceGeneration
      Code Type = Py
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      End Routine:
        import numpy as np
        import pandas as pd

        # set up parameters
        trialAll_num = 20
        trialCongruent_proportion = 4/5 # proportion of congruent trials
        trialCongruent_num_expected = int(trialAll_num * trialCongruent_proportion)
        trialIncongruent_num_expected = int(trialAll_num - trialCongruent_num_expected)

        # create lists for congruent and incongruent trials
        congruent_trials = ['>>>>>', '<<<<<'] * (trialCongruent_num_expected // 2)
        incongruent_trials = ['>><>>', '<<><<'] * (trialIncongruent_num_expected // 2)

        # combine lists and shuffle all trials
        stimuli = congruent_trials + incongruent_trials
        np.random.shuffle(stimuli)

        # create empty lists to store congruent and expected responses
        expectedResponse = []
        congruent = []

        for arrows in stimuli:
            if arrows in ['>>>>>', '<<<<<']:
                congruent.append(1)  # congruent trial
                expectedResponse.append('right' if arrows[2] == '>' else 'left')

            else:
                congruent.append(0)  # incongruent trial
                expectedResponse.append('right' if arrows[2] == '>' else 'left')

        # create an empty array to store blank duration
        blank_duration = np.empty(trialAll_num, dtype=float)

        # create blank duration options
        duration_pool = np.array([0.5, 0.55, 0.6, 0.65, 0.7] * 4)
        # shuffle the duration pool randomly
        np.random.shuffle(duration_pool)
        # assign the shuffled pool to blank_duration
        blank_duration = duration_pool

        # create a DataFrame
        trial = np.arange(1, trialAll_num + 1)
        sequenceDataset = pd.DataFrame({
            'trial': trial,
            'arrows': stimuli,
            'congruent': congruent,
            'expectedResponse': expectedResponse,
            'observedResponse': np.nan,
            'Accuracy': np.nan,
            'RT_allTrials': np.nan,
            'RT_correctTrials': np.nan,
            'blank_duration': blank_duration,
            'trialDuration': np.nan
        })

        sequenceDataset
  Routine expStimuliSequenceGeneration
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    CodeComponent expSequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        # set up parameters
        trialAll_num = 300
        trialCongruent_proportion = 4/5 # proportion of congruent trials
        trialCongruent_num_expected = int(trialAll_num * trialCongruent_proportion)
        trialIncongruent_num_expected = int(trialAll_num - trialCongruent_num_expected)

        # create lists for congruent and incongruent trials
        congruent_trials = ['>>>>>', '<<<<<'] * (trialCongruent_num_expected // 2)
        incongruent_trials = ['>><>>', '<<><<'] * (trialIncongruent_num_expected // 2)

        # combine lists and shuffle all trials
        stimuli = congruent_trials + incongruent_trials
        np.random.shuffle(stimuli)

        # create empty lists to store congruent and expected responses
        expectedResponse = []
        congruent = []

        for arrows in stimuli:
            if arrows in ['>>>>>', '<<<<<']:
                congruent.append(1)  # congruent trial
                expectedResponse.append('right' if arrows[2] == '>' else 'left')

            else:
                congruent.append(0)  # incongruent trial
                expectedResponse.append('right' if arrows[2] == '>' else 'left')

        # create an empty array to store blank duration
        blank_duration = np.empty(trialAll_num, dtype=float)

        # create blank duration options
        duration_pool = np.array([0.45, 0.5, 0.55, 0.6, 0.65, 0.7] * 50)
        # shuffle the duration pool randomly
        np.random.shuffle(duration_pool)
        # assign the shuffled pool to blank_duration
        blank_duration = duration_pool

        # create a DataFrame
        trial = np.arange(1, trialAll_num + 1)
        sequenceDataset = pd.DataFrame({
            'trial': trial,
            'arrows': stimuli,
            'congruent': congruent,
            'expectedResponse': expectedResponse,
            'observedResponse': np.nan,
            'Accuracy': np.nan,
            'RT_allTrials': np.nan,
            'RT_correctTrials': np.nan,
            'blank_duration': blank_duration,
            'trialDuration': np.nan
        })

        sequenceDataset
  Routine COMsettings
    RoutineSettingsComponent COMsettings
      desc = sets some info for the COM communication
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import serial

        # connect to serial COM port
        # True = yes for the experiment flow and the serial port communication
        # False = no for the experiment flow only
        # The COM port needs to be updated based on the specific device connection
        doYouWantCOM = False
        if doYouWantCOM:
            port = serial.Serial(port='COM7', baudrate=2000000)
            port.timeout = 1               # timeout 1 second (give 1 second to the board to initialize port)


        marker_stimulusOnset_congruent   = 1
        marker_stimulusOnset_incongruent = 2
        marker_response_correct          = 16
        marker_response_incorrect        = 32
Flow
  Routine COMsettings
  Routine instruction
  Routine instruction2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startpractice
    Routine practStimuliSequenceGeneration
    LoopInitiator practiceBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine practiceBlank
      Routine practiceTrial
      Routine practiceTrial_feedback
    LoopTerminator practiceBlock
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine instruction
  Routine instruction2
  Routine inst_EEGrecording
  Routine starttask
  Routine expStimuliSequenceGeneration
  LoopInitiator experimentalBlock loopType="TrialHandler"
    loopType = sequential
    nReps = len(sequenceDataset)
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    Routine experimentalBlank
    Routine experimentalTrial
  LoopTerminator experimentalBlock
  Routine endslide
