PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = gonogo
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine experimentalTrial
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    CodeComponent expTrial_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myExp.trial',            sequenceDataset.trial[experimentalBlock.thisN])
        thisExp.addData('myExp.letter',           sequenceDataset.letter[experimentalBlock.thisN])
        thisExp.addData('myExp.nogo_letter',           sequenceDataset.nogo_letter[experimentalBlock.thisN])
        thisExp.addData('myExp.nogo',      sequenceDataset.nogo[experimentalBlock.thisN])
        thisExp.addData('myExp.expectedResponse', sequenceDataset.expectedResponse[experimentalBlock.thisN])
      Each Frame:
        # nogo_letter
        sequenceDataset.nogo_letter[experimentalBlock.thisN] = nogo_data['nogo_letter'].iloc[AllExperimentalBlocks.thisN]
        thisExp.addData('myExp.nogo_letter', sequenceDataset.nogo_letter[experimentalBlock.thisN])

        # nogo
        sequenceDataset.nogo[experimentalBlock.thisN] = int(sequenceDataset.letter[experimentalBlock.thisN] == nogo_data['nogo_letter'].iloc[AllExperimentalBlocks.thisN])
        thisExp.addData('myExp.nogo', sequenceDataset.nogo[experimentalBlock.thisN])
      End Routine:
        # expected key
        if sequenceDataset.nogo[experimentalBlock.thisN] == 1:
            sequenceDataset.expectedResponse[experimentalBlock.thisN]         = "None"
        else:
            sequenceDataset.expectedResponse[experimentalBlock.thisN]         = "space"
        thisExp.addData('myExp.expectedResponse',         sequenceDataset.expectedResponse[experimentalBlock.thisN])

        # observed response
        if expTrial_key.keys:
            sequenceDataset.observedResponse[experimentalBlock.thisN]        = expTrial_key.keys
        else:
            sequenceDataset.observedResponse[experimentalBlock.thisN]        = 'None'
        thisExp.addData('myExp.observedResponse', sequenceDataset.observedResponse[experimentalBlock.thisN])

        # Accuracy
        if sequenceDataset.nogo[experimentalBlock.thisN] == 1:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == "None")
        else:
            sequenceDataset.Accuracy[experimentalBlock.thisN]             = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == "space")
        thisExp.addData('myExp.Accuracy',         sequenceDataset.Accuracy[experimentalBlock.thisN])

        # AccuracyNogo
        if sequenceDataset.nogo[experimentalBlock.thisN] == 1:
            sequenceDataset.AccuracyNogo[experimentalBlock.thisN]         = int(sequenceDataset.observedResponse[experimentalBlock.thisN] == "None")
        thisExp.addData('myExp.AccuracyNogo',         sequenceDataset.AccuracyNogo[experimentalBlock.thisN])

        # RT all trials
        if expTrial_key.keys:
            sequenceDataset.RT_allTrials[experimentalBlock.thisN]         = expTrial_key.rt
        else:
            sequenceDataset.RT_allTrials[experimentalBlock.thisN]         = None
        thisExp.addData('myExp.RT_allTrials',     sequenceDataset.RT_allTrials[experimentalBlock.thisN])

        # RT correct trials
        if expTrial_key.keys and sequenceDataset.Accuracy[experimentalBlock.thisN] == 1 and sequenceDataset.nogo[experimentalBlock.thisN] != 1:
            sequenceDataset.RT_correctTrials[experimentalBlock.thisN]     = expTrial_key.rt
        else:
            sequenceDataset.RT_correctTrials[experimentalBlock.thisN]     = None
        thisExp.addData('myExp.RT_correctTrials',     sequenceDataset.RT_correctTrials[experimentalBlock.thisN])
    TextComponent expTrial_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    TextComponent expTrial_stimuli
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $sequenceDataset.letter[experimentalBlock.thisN]
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    KeyboardComponent expTrial_key
      allowedKeys = 'space', None
      correctAns = $sequenceDataset.expectedResponse[experimentalBlock.thisN]
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = first key
      storeCorrect = True
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    CodeComponent expTrial_serialCOM
      Code Type = Py
      Begin Routine:
        # initialize variables controlling whether the stimulus and response triggers have been sent for this trial
        stimulusPulse_sent = False
        responsePulse_sent = False
      Each Frame:
        # communicate with the serial port
        if doYouWantCOM:

            # send stimulus pulse and record at what time it is sent
            if expTrial_stimuli.status == STARTED and not stimulusPulse_sent:
                # decide which marker to send
                if sequenceDataset.nogo[experimentalBlock.thisN]:
                    stimmarker2send = marker_stimulusOnset_nogo
                else:
                    stimmarker2send = marker_stimulusOnset_go
                # send marker
                win.callOnFlip(port.write, [stimmarker2send])
                stimulusPulse_startTime = core.monotonicClock.getTime()
                stimulusPulse_sent = True
                stimulusPulse_terminated = False
            # forcing termination of a stimulus pulse if it lasts at least 20 ms
            if stimulusPulse_sent and not stimulusPulse_terminated:
                if core.monotonicClock.getTime() - stimulusPulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    stimulusPulse_terminated = True


            # send a response pulse and record at what time it is sent
            if len(expTrial_key.keys)>0 and not responsePulse_sent:
                # decide which marker to send
                if expTrial_key.keys == 'space':
                    if sequenceDataset.nogo[experimentalBlock.thisN]:
                        respmarker2send = marker_response_falsePositive
                    else:
                        respmarker2send = marker_response_truePositive
                # send marker
                win.callOnFlip(port.write, [respmarker2send])
                responsePulse_startTime = core.monotonicClock.getTime()
                responsePulse_sent = True
                responsePulse_terminated = False
            # forcing termination of a response pulse if it lasts at least 20 ms
            if responsePulse_sent and not responsePulse_terminated:
                if core.monotonicClock.getTime() - responsePulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    responsePulse_terminated = True
      End Routine:
        # add timing of triggers
        if stimulusPulse_sent:
            thisExp.addData('myExp.stimulusPulse_startTime', stimulusPulse_startTime)
            thisExp.addData('myExp.stimulusPulse_marker', stimmarker2send)
        if responsePulse_sent:
            thisExp.addData('myExp.responsePulse_startTime', responsePulse_startTime)
            thisExp.addData('myExp.responsePulse_marker', respmarker2send)
  Routine practiceBlank
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    CodeComponent practBlank_addData
      Code Type = Py
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      Begin Routine:
        # blank duration
        thisExp.addData('myPract.blankDuration',      sequenceDataset.blank_duration[practiceBlock.thisN])
    TextComponent practBlank_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.blank_duration[practiceBlock.thisN]
      text = +
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  Routine practiceTrial
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    CodeComponent practTrial_addData
      Code Type = Py
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('myPract.trial', sequenceDataset.trial[practiceBlock.thisN])
        thisExp.addData('myPract.letter', sequenceDataset.letter[practiceBlock.thisN])
        thisExp.addData('myPract.nogo_letter', sequenceDataset.nogo_letter[practiceBlock.thisN])
        thisExp.addData('myPract.nogo',      sequenceDataset.nogo[practiceBlock.thisN])
        thisExp.addData('myPract.expectedResponse', sequenceDataset.expectedResponse[practiceBlock.thisN])
      Each Frame:
        # nogo_letter
        sequenceDataset.nogo_letter[practiceBlock.thisN] = nogo_data['nogo_letter'].iloc[AllPracticeBlocks.thisN]
        thisExp.addData('myPract.nogo_letter', sequenceDataset.nogo_letter[practiceBlock.thisN])

        # nogo
        sequenceDataset.nogo[practiceBlock.thisN] = int(sequenceDataset.letter[practiceBlock.thisN] == nogo_data['nogo_letter'].iloc[AllPracticeBlocks.thisN])
        thisExp.addData('myPract.nogo', sequenceDataset.nogo[practiceBlock.thisN])
      End Routine:
        # expected key
        if sequenceDataset.nogo[practiceBlock.thisN] == 1:
            sequenceDataset.expectedResponse[practiceBlock.thisN]        = "None"
        else:
            sequenceDataset.expectedResponse[practiceBlock.thisN]        = "space"
        thisExp.addData('myPract.expectedResponse',         sequenceDataset.expectedResponse[practiceBlock.thisN])

        # observed response
        if practTrial_key.keys:
            sequenceDataset.observedResponse[practiceBlock.thisN]       = practTrial_key.keys
        else:
            sequenceDataset.observedResponse[practiceBlock.thisN]       = 'None'
        thisExp.addData('myPract.observedResponse', sequenceDataset.observedResponse[practiceBlock.thisN])

        # Accuracy
        if sequenceDataset.nogo[practiceBlock.thisN] == 1:
            sequenceDataset.Accuracy[practiceBlock.thisN]              = int(sequenceDataset.observedResponse[practiceBlock.thisN] == "None")
        else:
            sequenceDataset.Accuracy[practiceBlock.thisN]               = int(sequenceDataset.observedResponse[practiceBlock.thisN] == "space")
        thisExp.addData('myPract.Accuracy',         sequenceDataset.Accuracy[practiceBlock.thisN])

        # AccuracyNogo
        if sequenceDataset.nogo[practiceBlock.thisN] == 1:
            sequenceDataset.AccuracyNogo[practiceBlock.thisN]           = int(sequenceDataset.observedResponse[practiceBlock.thisN] == "None")
        thisExp.addData('myPract.AccuracyNogo',         sequenceDataset.AccuracyNogo[practiceBlock.thisN])

        # RT all trials
        if practTrial_key.keys:
            sequenceDataset.RT_allTrials[practiceBlock.thisN]            = practTrial_key.rt
        else:
            sequenceDataset.RT_allTrials[practiceBlock.thisN]            = None
        thisExp.addData('myPract.RT_allTrials',     sequenceDataset.RT_allTrials[practiceBlock.thisN])

        # RT correct trials
        if practTrial_key.keys and sequenceDataset.Accuracy[practiceBlock.thisN] == 1 and sequenceDataset.nogo[practiceBlock.thisN] != 1:
            sequenceDataset.RT_correctTrials[practiceBlock.thisN]        = practTrial_key.rt
        else:
            sequenceDataset.RT_correctTrials[practiceBlock.thisN]        = None
        thisExp.addData('myPract.RT_correctTrials',     sequenceDataset.RT_correctTrials[practiceBlock.thisN])
    TextComponent practBlank_cross2
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent practTrial_stimuli
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $sequenceDataset.letter[practiceBlock.thisN]
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    KeyboardComponent practTrial_key
      allowedKeys = 'space', None
      correctAns = $sequenceDataset.expectedResponse[practiceBlock.thisN]
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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    CodeComponent practTrial_serialCOM
      Code Type = Py
      disabled = True
      Begin Routine:
        # initialize variables controlling whether the stimulus and response triggers have been sent for this trial
        stimulusPulse_sent = False
        responsePulse_sent = False
      Each Frame:
        # communicate with the serial port
        if doYouWantCOM:

            # send stimulus pulse and record at what time it is sent
            if practTrial_stimuli.status == STARTED and not stimulusPulse_sent:
                # decide which marker to send
                if sequenceDataset.nogo[practiceBlock.thisN]:
                    stimmarker2send = marker_stimulusOnset_nogo
                else:
                    stimmarker2send = marker_stimulusOnset_go
                # send marker
                win.callOnFlip(port.write, [stimmarker2send])
                stimulusPulse_startTime = core.monotonicClock.getTime()
                stimulusPulse_sent = True
                stimulusPulse_terminated = False
            # forcing termination of a stimulus pulse if it lasts at least 20 ms
            if stimulusPulse_sent and not stimulusPulse_terminated:
                if core.monotonicClock.getTime() - stimulusPulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    stimulusPulse_terminated = True


            # send a response pulse and record at what time it is sent
            if len(practTrial_key.keys)>0 and not responsePulse_sent:
                # decide which marker to send
                if practTrial_key.keys == 'space':
                    if sequenceDataset.nogo[practiceBlock.thisN]:
                        respmarker2send = marker_response_falsePositive
                    else:
                        respmarker2send = marker_response_truePositive
                # send marker
                win.callOnFlip(port.write, [respmarker2send])
                responsePulse_startTime = core.monotonicClock.getTime()
                responsePulse_sent = True
                responsePulse_terminated = False
            # forcing termination of a response pulse if it lasts at least 20 ms
            if responsePulse_sent and not responsePulse_terminated:
                if core.monotonicClock.getTime() - responsePulse_startTime >= 0.020:
                    win.callOnFlip(port.write, [0])
                    responsePulse_terminated = True
      End Routine:
        # add timing of triggers
        if stimulusPulse_sent:
            thisExp.addData('myPract.stimulusPulse_startTime', stimulusPulse_startTime)
            thisExp.addData('myPract.stimulusPulse_marker', stimmarker2send)
        if responsePulse_sent:
            thisExp.addData('myPract.responsePulse_startTime', responsePulse_startTime)
            thisExp.addData('myPract.responsePulse_marker', respmarker2send)
  Routine ExpBlockInstruction
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    CodeComponent instExp_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('ExpSetUp.nogoBlock_num',            nogo_data.nogoBlock_num[AllExperimentalBlocks.thisN])
        thisExp.addData('ExpSetUp.nogo_letter',            nogo_data.nogo_letter[AllExperimentalBlocks.thisN])
    TextComponent instExp_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        For this block,
        please do not response to
    TextComponent instExp_letter
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $nogo_data.nogo_letter[AllExperimentalBlocks.thisN]
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  Routine practiceTrial_feedback
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    CodeComponent practFB_code
      Code Type = Auto->JS
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      Begin Routine:
        # text, color, and sound of feedback
        if sequenceDataset.Accuracy[practiceBlock.thisN] == 1:
            fb_text = 'Correct!'
            fb_col = 'green'
            sound_volume = 0
        else:
            if sequenceDataset.observedResponse[practiceBlock.thisN] == 'None' and sequenceDataset.nogo[practiceBlock.thisN] == 0:
                fb_text = 'Fail to respond'
                fb_col = 'red'
                sound_volume = 1
            else:
                fb_text = 'Fail to stop'
                fb_col = 'red'
                sound_volume = 1

        # duration of feedback
        fb_duration = 0.5
    TextComponent practFB_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent practFB_text
      color [set every repeat] = $fb_col
      letterHeight = 2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_duration
      text [set every repeat] = $fb_text
      units = deg
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    SoundComponent practFB_sound
      forceEndRoutine = False
      hamming = False
      sound = 600
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.050
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = sound_volume
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  Routine practiceBlock_feedback
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    CodeComponent practFB_code2
      Code Type = Py
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      Begin Routine:
        # number of trials
        Practice_allTrials_num = len(sequenceDataset.Accuracy)
        Practice_NogoTrials_num = np.sum(sequenceDataset.nogo)

        # number of trials with correct answer
        Practice_correctTrials_num = np.sum(sequenceDataset.Accuracy)
        Practice_correctNogoTrials_num = np.sum(sequenceDataset.AccuracyNogo)

        # percentage of trials with correct answer
        Practice_correctTrials_pct= 100*Practice_correctTrials_num/ Practice_allTrials_num
        Practice_correctNogoTrials_pct= 100*Practice_correctNogoTrials_num/ Practice_NogoTrials_num

        # Mdn RT for all responses
        Practice_allTrials_MdnRT = np.median(sequenceDataset.RT_allTrials)

        # Mdn RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_MdnRT = np.nanmedian(sequenceDataset.RT_correctTrials)

        # 3rd quartile (i.e., 75th percentile) RT for only correct responses
        if Practice_correctTrials_num> 0:
            Practice_correctTrials_3qrtRT = np.nanpercentile(sequenceDataset.RT_correctTrials, 75)


        # message for feedback
        if Practice_correctTrials_num> 0:
            msg =  "%i of %i correct responses \n%.2f%% correct overall \n%i of %i correct stops \n%.2f%% correct stops \nMdn RT = %.2f s " % (Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctNogoTrials_num, Practice_NogoTrials_num, Practice_correctNogoTrials_pct, Practice_correctTrials_MdnRT)

        else:
            msg =  "%i of %i correct responses \n%.2f%% correct overall \n%i of %i correct stops \n%.2f%% correct stops" % (Practice_correctTrials_num, Practice_allTrials_num, Practice_correctTrials_pct, Practice_correctNogoTrials_num, Practice_NogoTrials_num, Practice_correctNogoTrials_pct)


        # color of feedback
        if Practice_correctTrials_pct>=70 and Practice_correctNogoTrials_pct >= 70:
            fb_col = 'green'     # if accuracy is at least the value above
        else:
            fb_col = 'red'
      End Routine:
        if Practice_correctTrials_pct>=70 and Practice_correctNogoTrials_pct >= 70:
            practiceRepetition.finished = True
    TextComponent practFB_text2
      color [set every repeat] = $fb_col
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $msg
    TextComponent practFB_cont
      letterHeight = 0.1
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If your accuracy was less than 70% you will repeat the practice block.

        Press bar to continue
    KeyboardComponent practFB_contKey
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instruction
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    ImageComponent instImage
      image = instruction1.jpg
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent instCont
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent instContKey
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instruction2
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    ImageComponent instImage2
      image = instruction2.jpg
      pos = (0,0.05)
      startVal [time (s)] = 0.0
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    TextComponent instCont2
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent instContKey2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine startpractice
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    TextComponent startPract_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press bar to start the practice
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    KeyboardComponent startPract_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine starttask
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    KeyboardComponent startExp_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent startExp_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press bar to start
        the experimental task
  Routine endslide
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    ImageComponent endImage
      image = end slide.jpg
      startVal [time (s)] = 0.0
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    TextComponent endCont
      letterHeight = 0.1
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press bar to submit
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    KeyboardComponent endContKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_EEGrecording
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    ImageComponent instImage_EEG
      image = EEG_instruction.jpg
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent instCont3
      letterHeight = 0.1
      pos = (0, -0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press bar to continue
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    KeyboardComponent instContKey3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experimentalBlank
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    CodeComponent expBlank_addData
      Code Type = Auto->JS
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      Begin Routine:
        # blank duration
        thisExp.addData('myExp.blank_duration',      sequenceDataset.blank_duration[experimentalBlock.thisN])
      End Routine:
        # trialDuration
        sequenceDataset.trialDuration[experimentalBlock.thisN] = sequenceDataset.blank_duration[experimentalBlock.thisN] + 1
        thisExp.addData('myExp.trialDuration',      sequenceDataset.trialDuration[experimentalBlock.thisN])
    TextComponent expBlank_cross
      letterHeight = 0.05
      pos = (0, -0.0125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sequenceDataset.blank_duration[experimentalBlock.thisN]
      text = +
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  Routine practLetterSequenceGeneration
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    CodeComponent practLetter_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import random
        import pandas as pd
        import numpy as np

        # define the pool of letter
        nogo_pool = ['A']

        # randomly shuffle the pool
        random.shuffle(nogo_pool)

        # define the number of blocks
        block_num = len(nogo_pool)

        # create block number column
        nogoBlock_num = np.arange(1, block_num + 1)

        # create a DataFrame
        nogo_data = pd.DataFrame({
            'nogoBlock_num': nogoBlock_num,
            'nogo_letter': nogo_pool
        })

        nogo_data
  Routine practStimuliSequenceGeneration
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    CodeComponent practStimuli_sequenceGeneration
      Code Type = Py
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      End Routine:
        import numpy as np
        import pandas as pd

        # set up parameters
        trialAll_num = 20
        block = 1

        # create trial column
        trial = 1 + np.arange(0, trialAll_num)

        # create a pool of letters
        pool = ["A", "B", "C", "D", "E"]

        # create an empty array for storing letter
        letter = np.empty(trialAll_num, dtype="<U1")

        # fill letter column
        for trialIdx in range(block):
            block_letters = np.repeat(pool, trialAll_num // len(pool))
            np.random.shuffle(block_letters)  # shuffle letters within the block

            # assign letters to the trial sequence
            letter[trialIdx * trialAll_num:(trialIdx + 1) * trialAll_num] = block_letters

        # create an empty array to store blank duration
        blank_duration = np.empty(trialAll_num, dtype=float)

        # create blank duration options
        duration_pool = np.array([0.5, 0.55, 0.6, 0.65, 0.7] * 4)
        # shuffle the duration pool randomly
        np.random.shuffle(duration_pool)
        # assign the shuffled pool to blank_duration
        blank_duration = duration_pool

        # create dataset
        sequenceDataset = pd.DataFrame({
            'trial': trial,
            'letter': letter,
            'nogo_letter': np.nan,
            'nogo': np.nan,
            'expectedResponse': np.nan,
            'observedResponse': np.nan,
            'Accuracy': np.nan,
            'AccuracyNogo': np.nan,
            'RT_allTrials': np.nan,
            'RT_correctTrials': np.nan,
            'blank_duration': blank_duration,
            'trialDuration': np.nan,
        })

        sequenceDataset
  Routine practBlockInstruction
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    CodeComponent instPract_addData
      Code Type = Auto->JS
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      Begin Routine:
        # add data about the sequence
        thisExp.addData('PractSetUp.nogoBlock_num',            nogo_data.nogoBlock_num[AllPracticeBlocks.thisN])
        thisExp.addData('PractSetUp.nogo_letter',            nogo_data.nogo_letter[AllPracticeBlocks.thisN])
    TextComponent instPract_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        For this block,
        please do not response to
    TextComponent instPract_letter
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.3
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $nogo_data.nogo_letter[AllPracticeBlocks.thisN]
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  Routine expStimuliSequenceGeneration
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    CodeComponent expStimuli_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import numpy as np
        import pandas as pd

        # set up parameters
        trialAll_num = 60
        block = 1

        # create trial column
        trial = 1 + np.arange(0, trialAll_num)

        # create a pool of letters
        pool = ["A", "B", "C", "D", "E"]

        # create empty array for storing letter
        letter = np.empty(trialAll_num, dtype="<U1")

        # fill letter column
        for trialIdx in range(block):
            # add 12 repeated times of each letter
            block_letters = np.repeat(pool, trialAll_num // len(pool))
            np.random.shuffle(block_letters)  # shuffle letters within the block

            # assign letters to the trial sequence
            letter[trialIdx * trialAll_num:(trialIdx + 1) * trialAll_num] = block_letters

        # create an empty array to store blank duration
        blank_duration = np.empty(trialAll_num, dtype=float)

        # create blank duration options
        duration_pool = np.array([0.45, 0.5, 0.55, 0.6, 0.65, 0.7] * 10)
        # shuffle the duration pool randomly
        np.random.shuffle(duration_pool)
        # assign the shuffled pool to blank_duration
        blank_duration = duration_pool

        # create dataset
        sequenceDataset = pd.DataFrame({
            'trial': trial,
            'letter': letter,
            'nogo_letter': np.nan,
            'nogo': np.nan,
            'expectedResponse': np.nan,
            'observedResponse': np.nan,
            'Accuracy': np.nan,
            'AccuracyNogo': np.nan,
            'RT_allTrials': np.nan,
            'RT_correctTrials': np.nan,
            'blank_duration': blank_duration,
            'trialDuration': np.nan,
        })

        sequenceDataset
  Routine expLetterSequenceGeneration
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    CodeComponent expLetter_sequenceGeneration
      Code Type = Auto->JS
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      End Routine:
        import random
        import pandas as pd
        import numpy as np

        # define the pool of letters
        nogo_pool = ['A', 'B', 'C', 'D', 'E']

        # randomly shuffle the pool
        random.shuffle(nogo_pool)

        # define the number of blocks
        block_num = len(nogo_pool)

        # create block number column
        nogoBlock_num = np.arange(1, block_num + 1)

        # create a DataFrame from the shuffled pool
        nogo_data = pd.DataFrame({
            'nogoBlock_num': nogoBlock_num,
            'nogo_letter': nogo_pool

        })

        nogo_data
  Routine COMsettings
    RoutineSettingsComponent COMsettings
      desc = sets some info for the COM communication
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import serial

        # connect to serial COM port
        # True = yes for the experiment flow and the serial port communication
        # False = no for the experiment flow only
        # The COM port needs to be updated based on the specific device connection
        doYouWantCOM = False
        if doYouWantCOM:
            port = serial.Serial(port='COM7', baudrate=2000000)
            port.timeout = 1               # timeout 1 second (give 1 second to the board to initialize port)


        marker_stimulusOnset_go       = 1
        marker_stimulusOnset_nogo     = 2
        marker_response_truePositive  = 16 # response in a go trial
        marker_response_falsePositive = 32 # response in a nogo trial
Flow
  Routine COMsettings
  Routine instruction
  Routine instruction2
  LoopInitiator practiceRepetition loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine startpractice
    Routine practLetterSequenceGeneration
    LoopInitiator AllPracticeBlocks loopType="TrialHandler"
      loopType = sequential
      nReps = len(nogo_data)
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      Routine practBlockInstruction
      Routine practStimuliSequenceGeneration
      LoopInitiator practiceBlock loopType="TrialHandler"
        loopType = sequential
        nReps = len(sequenceDataset)
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        Routine practiceBlank
        Routine practiceTrial
        Routine practiceTrial_feedback
      LoopTerminator practiceBlock
    LoopTerminator AllPracticeBlocks
    Routine practiceBlock_feedback
  LoopTerminator practiceRepetition
  Routine instruction
  Routine instruction2
  Routine instruction_EEGrecording
  Routine starttask
  Routine expLetterSequenceGeneration
  LoopInitiator AllExperimentalBlocks loopType="TrialHandler"
    loopType = sequential
    nReps = len(nogo_data)
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    Routine ExpBlockInstruction
    Routine expStimuliSequenceGeneration
    LoopInitiator experimentalBlock loopType="TrialHandler"
      loopType = sequential
      nReps = len(sequenceDataset)
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      Routine experimentalBlank
      Routine experimentalTrial
    LoopTerminator experimentalBlock
  LoopTerminator AllExperimentalBlocks
  Routine endslide
